name: PCR - Workflow

metadata:
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: plateEx
  - name: camera

flowdef:
  - name: Move tip bin from Stack4 to Solo Position3
    module: plateCrane
    action: transfer
    args:
      source: "Stack4"
      target: "Solo.Position3"
      source_type: "stack"
      target_type: "stack"
      plate_type: "tip_box_lid_off"
    checks: null
    comment: Place plate in Solo Position4

  - name: Move plate from Stack5 to Solo Position4
    module: plateCrane
    action: transfer
    args:
      source: "Stack5"
      target: "Solo.Position4"
      source_type: "stack"
      target_type: "module"
      plate_type: "96_well"
    checks: null
    comment: Place plate in Solo Position4

  - name: Remove lid
    module: plateCrane
    action: remove_lid
    args:
      source: "Solo.Position4"
      target: "LidNest2"
      plate_type: "96_well"
    checks: null
    comment: Place plate lid on lid nest 2

  # # Run steps 1,2, and 3 of solo growth curve protocol
  # # STEP 1
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     protocol_path: "C:\\labautomation\\instructions_wei\\Growth_Curve-wei-v1-1683313673\\plate0_step1.hso"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  #     # STEP 2
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     protocol_path: "C:\\labautomation\\instructions_wei\\Growth_Curve-wei-v1-1683313673\\plate0_step2.hso"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # # STEP 3
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     protocol_path: "C:\\labautomation\\instructions_wei\\Growth_Curve-wei-v1-1683313673\\plate0_step3.hso"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # TEST
  - name: Mix Reactions
    module: solo
    action: run_protocol
    args:
      protocol_path: "C:\\Users\\svcaibio\\Dev\\hidex_module\\hidex_driver\\ahk\\test_hso\\test.hso"
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Solo Position4 to Hidex Nest
    module: plateCrane
    action: transfer
    args:
      source: "Solo.Position4"
      target: "HidexNest2"
      source_type: "module"
      target_type: "module"   
      plate_type: "96_well"   
      height_offset: "360"
    checks: null
    comment: Place plate to Hidex Nest

  - name: run Hidex
    module: hidex
    action: run_protocol
    args: 
      protocol_path: "C:\\Users\\svcaibio\\Documents\\Hidex Sense\\Campaign2_wei.sensetemplate"
    checks: null
    comment: Run protocol at hidex

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Sealer
    module: plateCrane
    action: transfer
    args:
      source: "HidexNest2"
      target: "SealerNest"
      source_type: "module"
      target_type: "module"  
      plate_type: "96_well"   
      height_offset: "360"
    checks: null
    comment: Place plate to Sealer

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Seal PCR plate
    module: sealer
    action: seal
    args:
      time: payload:seal.time
      temperature: 175
    checks: null
    comment: null

  - name: Move plate from Sealer to Liconic
    module: plateCrane
    action: transfer
    args:
      source: "SealerNest"
      target: "Liconic.Nest"
      source_type: "module"
      target_type: "stack"   
      plate_type: "96_well"   
    checks: null
    comment: Place plate onto Liconic

  - name: Load Liconic
    module: liconic
    action: load_plate
    args: 
      stacker: payload.stacker
      slot: payload.slot
    checks: null
    comment: Stage pcr plates

  - name: Start shaker at set speed
    module: liconic
    action: begin_shake
    args: 
      shaker_speed: payload.shaker_speed
    checks: null
    comment: Stage pcr plates

  # - name: Wait
  #   module: local
  #   action: wait
  #   args: 
  #     wait_time: "12:00:00"
  #   checks: null
  #   comment: Stage pcr plates

  - name: Unload Liconic
    module: liconic
    action: unload_plate
    args: 
      stacker: payload.stacker
      slot: payload.slot
    checks: null
    comment: Stage pcr plates
    
  - name: Move plate from Liconic to Peeler
    module: plateCrane
    action: transfer
    args:
      source: "Liconic.Nest"
      target: "PeelerNest"
      source_type: "stack"
      target_type: "module"   
      plate_type: "96_well"   
    checks: null
    comment: Place plate onto PeelerNest
  
  - name: Peel
    module: peeler
    action: peel
    args:
      test: null
    checks: null
    comment: null
    
  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from PeelerNest to HidexNest
    module: plateCrane
    action: transfer
    args:
      source: "PeelerNest"
      target: "HidexNest2"
      source_type: "module"
      target_type: "module"  
      plate_type: "96_well"   
      height_offset: "360"
    checks: null
    comment: Place plate in Hidex Nest

  - name: Run Protocol Hidex
    module: hidex
    action: run_protocol
    args: 
      protocol_path: "C:\\Users\\svcaibio\\Documents\\Hidex Sense\\Campaign2_wei.sensetemplate"
    checks: null  
    comment: Run protocol Hidex 

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Stack1
    module: plateCrane
    action: transfer
    args:
      source: "HidexNest2"
      target: "Stack1"
      source_type: "module"
      target_type: "stack"   
      plate_type: "96_well"   
      height_offset: "360"
    checks: null
    comment: Place plate into trash stack

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  # - name: Move to camera_module
  #   module: plateEx
  #   action: transfer
  #   args:
  #     source: peeler.positions.default
  #     target: camera_module.positions.plate_station
  #     source_plate_rotation: narrow
  #     target_plate_rotation: narrow

  # - name: Take Picture
  #   module: camera_module
  #   action: take_picture
  #   args:
  #     save_location: local_run_results
  #     file_name: "final_image.jpg"
