name: Solo Run

metadata:
  author: Alp Demirtas
  info: Workflow for Running Hudson Solo Individually
  version: 0.1

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: plateEx
  - name: camera

flowdef:

  - name: Refill Tips
    module: solo
    action: refill_tips
    args:
      position: payload.tip_box_position
    checks: null
    comment: Reset Tip Box Number to 96 Tips

    # STEP 1
  - name: Mix Reactions
    module: solo
    action: run_protocol
    args:
      hso_contents: payload.hso_1
      hso_num_lines: payload.hso_1_lines
      hso_basename: payload.hso_1_basename
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

    # STEP 2
  - name: Mix Reactions
    module: solo
    action: run_protocol
    args:
      hso_contents: payload.hso_2
      hso_num_lines: payload.hso_2_lines
      hso_basename: payload.hso_2_basename
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

    # STEP 3
  - name: Mix Reactions
    module: solo
    action: run_protocol
    args:
      hso_contents: payload.hso_3
      hso_num_lines: payload.hso_3_lines
      hso_basename: payload.hso_3_basename
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

