name: Growth Curve - Workflow

metadata:
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

modules:
  # - name: solo
  - name: peeler
  - name: sealer
  - name: platecrane
  - name: hidex
  - name: liconic


flowdef:
  - name: Move plate from Stack5 to Solo Position4
    module: platecrane
    action: transfer
    args:
      source: "Stack5"
      target: "Solo.Position4"
      source_type: "stack"
      target_type: "stack"
      plate_type: "96_well"
    checks: null
    comment: Place plate in Solo Position4

  - name: Remove lid
    module: platecrane
    action: remove_lid
    args:
      source: "Solo.Position4"
      target: "Stack2"
      plate_type: "96_well"
    checks: null
    comment: Place plate lid on lid nest 2
  
  # - name: Refill Tips
  #   module: solo
  #   action: refill_tips
  #   args:
  #     position: payload.tip_box_position
  #   checks: null
  #   comment: Reset Tip Box Number to 96 Tips

  #   # STEP 1
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     hso_contents: payload.hso_1
  #     hso_num_lines: payload.hso_1_lines
  #     hso_basename: payload.hso_1_basename
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Solo Position4 to Hidex Nest
    module: platecrane
    action: transfer
    args:
      source: "Solo.Position4"
      target: "HidexNest2"
      source_type: "module"
      target_type: "module"      
      height_offset: "700"
    checks: null
    comment: Place plate to Hidex Nest

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Sealer
    module: platecrane
    action: transfer
    args:
      source: "HidexNest2"
      target: "SealerNest"
      source_type: "module"
      target_type: "module"  
      height_offset: "650"
    checks: null
    comment: Place plate to Sealer

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Seal PCR plate
    module: sealer
    action: seal
    args:
      time: payload:seal.time
      temperature: 175
    checks: null
    comment: nullassay_name

  - name: Move plate from Sealer to Liconic
    module: platecrane
    action: transfer
    args:
      source: "SealerNest"
      target: "Liconic.Nest"
      source_type: "module"
      target_type: "stack"   
    checks: null
    comment: Place plate onto Liconic

  # - name: Load Liconic
  #   module: liconic
  #   action: load_plate
  #   args: 
  #     plate_id: "1"
  #   checks: null
  #   comment: Stage pcr plates

  # - name: Start shaker at set speed
  #   module: liconic
  #   action: begin_shake
  #   args: 
  #     shaker_speed: payload.shaker_speed
  #   checks: null
  #   comment: Stage pcr plates


  #   # end step 1

  # - name: Unload Liconic
  #   module: liconic
  #   action: unload_plate
  #   args: 
  #     plate_id: "1"
  #   checks: null
  #   comment: Stage pcr plates
      
  - name: Move plate from Liconic to Peeler
    module: platecrane
    action: transfer
    args:
      source: "Liconic.Nest"
      target: "PeelerNest"
      source_type: "stack"
      target_type: "module"   
    checks: null
    comment: Place plate onto PeelerNest
  
  - name: Peel
    module: peeler
    action: peel
    args:
      test: null
    checks: null
    comment: null
    
  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from PeelerNest to HidexNest
    module: platecrane
    action: transfer
    args:
      source: "PeelerNest"
      target: "HidexNest2"
      source_type: "module"
      target_type: "module"  
      height_offset: "700"
    checks: nullpayload.stacker
    comment: Place plate in Hidex Nest

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Stack1
    module: platecrane
    action: transfer
    args:
      source: "HidexNest2"
      target: "Stack1"
      source_type: "module"
      target_type: "stack"   
      height_offset: "650"
    checks: null
    comment: Place plate into trash Stack

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate
     

