name: Growth Curve - Workflow

metadata:
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

modules:
  - name: hidex

flowdef:
  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate
 
  # - name: Open Hidex
  #   module: hidex
  #   action: open
  #   args: 
  #     foo: "bar"
  #   checks: null
  #   comment: Open Hidex Gate

  # - name: Move plate from Solo Position4 to Hidex Nest
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position4"
  #     target: "HidexNest2"
  #     source_type: "module"
  #     target_type: "module"      
  #     height_offset: "700"
  #   checks: null
  #   comment: Place plate to Hidex Nest
  # - name: run Hidex
  #   module: hidex
  #   action: run_assay
  #   args: 
  #     assay_name: "Campaign2_wei_cs"

  # - name: Move tip bin from Solo Position3 to Stack 4
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position3"
  #     target: "Stack4"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"

  # - name: Move tip bin from Stack 4 to Solo Position 3
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Stack4"
  #     target: "Solo.Position3"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"

