name: Multi-Growth Assay Run Workflow - Obtain T0 Reading

metadata:
  author: Rafael Vescovi, Casey Stone, Abraham Stroka, Alp Demirtas
  info: Growth Assay Workflow and all of its individual components called from the multi_growth_curve.py file
  version: 1.3

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: plateEx
  - name: camera

flowdef:
  #   # STEP 1
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     hso_contents: payload.hso_1
  #     hso_num_lines: payload.hso_1_lines
  #     hso_basename: payload.hso_1_basename
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  #   # STEP 2
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     hso_contents: payload.hso_2
  #     hso_num_lines: payload.hso_2_lines
  #     hso_basename: payload.hso_2_basename
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  #   # STEP 3
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   args:
  #     hso_contents: payload.hso_3
  #     hso_num_lines: payload.hso_3_lines
  #     hso_basename: payload.hso_3_basename
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Solo Position4 to Hidex Nest
    module: plateCrane
    action: transfer
    args:
      source: "Solo.Position4"
      target: "HidexNest2"
      source_type: "module"
      target_type: "module"      
      height_offset: "700"
    checks: null
    comment: Place plate to Hidex Nest

  - name: run Hidex
    module: hidex
    action: run_assay
    args: 
      assay_name: "Campaign2_wei_cs"
    checks: null
    comment: Run protocol at hidex

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Sealer
    module: plateCrane
    action: transfer
    args:
      source: "HidexNest2"
      target: "SealerNest"
      source_type: "module"
      target_type: "module"  
      height_offset: "650"
    checks: null
    comment: Place plate to Sealer

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Seal PCR plate
    module: sealer
    action: seal
    args:
      time: payload:seal.time
      temperature: 175
    checks: null
    comment: nullassay_name

  - name: Move plate from Sealer to Liconic
    module: plateCrane
    action: transfer
    args:
      source: "SealerNest"
      target: "Liconic.Nest"
      source_type: "module"
      target_type: "stack"   
    checks: null
    comment: Place plate onto Liconic

  - name: Load Liconic
    module: liconic
    action: load_plate
    args: 
      plate_id: payload.incubation_plate_id
    checks: null
    comment: Stage pcr plates

  - name: Start shaker at set speed
    module: liconic
    action: begin_shake
    args: 
      shaker_speed: payload.shaker_speed
    checks: null
    comment: Stage pcr plates