name: Liconic Run

metadata:
  author: Alp Demirtas
  info: Workflow for Running Liconic Incubator Individually
  version: 0.1

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: platecrane
  - name: camera

flowdef:
  - name: Load Liconic
    module: liconic
    action: load_plate
    args: 
      plate_id: "44"
    checks: null
    comment: Stage pcr plates

  # # - name: Start shaker at set speed
  # #   module: liconic
  # #   action: begin_shake
  # #   args: 
  # #     shaker_speed: 30
  # #   checks: null
  # #   comment: Stage pcr plates

  # - name: Unload Liconic
  #   module: liconic
  #   action: unload_plate
  #   args: 
  #     plate_id: "6"
  #   checks: null
  #   comment: Stage pcr plates

