name: PlateCrane Run

metadata:
  author: Alp Demirtas
  info: Workflow for Running Hudson PlateCrane Individually
  version: 0.1

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: plateEx
  - name: camera

flowdef:

  # - name: Move tip bin from Solo Position3 to Stack4
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position3"
  #     target: "Stack4"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"
  #   checks: null
  #   comment: Place plate in Solo Position4

  - name: Move deep well plate from Stack3 to Peeler
    module: plateCrane
    action: transfer
    args:
      source: "Solo.Position2"
      target: "Stack3"
      source_type: "stack"
      target_type: "stack"
      plate_type: "96_deep_well"
    checks: null
    comment: Place plate in Solo Position4


  - name: Move deep well plate from Stack3 to Peeler
    module: plateCrane
    action: transfer
    args:
      source: "Solo.Position4"
      target: "Stack3"
      source_type: "stack"
      target_type: "stack"
      plate_type: "96_deep_well"
    checks: null
    comment: Place plate in Solo Position4

  - name: Move deep well plate from Stack3 to Peeler
    module: plateCrane
    action: transfer
    args:
      source: "Solo.Position6"
      target: "Stack3"
      source_type: "stack"
      target_type: "stack"
      plate_type: "96_deep_well"
    checks: null
    comment: Place plate in Solo Position4

  # - name: Move tip bin from Solo Position3 to Stack 1
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position3"
  #     target: "Stack1"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"
  #   checks: null
  #   comment: Place plate in Solo Position4

  # - name: Move tip bin from Stack4 to Solo Position3
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position3"
  #     target: "Stack1"
  #     source_type: "stack"
  #     target_type: "module"
  #     plate_type: "tip_box_lid_off"
  #   checks: null
  #   comment: Place plate in Solo Position4

  # - name: Move plate from PeelerNest to HidexNest
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "PeelerNest"
  #     target: "HidexNest2"
  #     source_type: "module"
  #     target_type: "module"  
  #     height_offset: "700"
  #   checks: null
  #   comment: Place plate in Hidex Nest
  
  # - name: Move plate from HidexNest to Stack2
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "HidexNest2"
  #     target: "Stack2"
  #     source_type: "module"
  #     target_type: "stack"   
  #     height_offset: "650"
  #   checks: null
  #   comment: Place plate into trash Stack

  # - name: Move plate from HidexNest to Sealer
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "HidexNest2"
  #     target: "SealerNest"
  #     source_type: "module"
  #     target_type: "module"  
  #     height_offset: "650"
  #   checks: null
  #   comment: Place plate to Sealer

  # - name: Move deep well plate from Stack3 to Peeler
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Stack3"
  #     target: "PeelerNest"
  #     source_type: "stack"
  #     target_type: "module"
  #     plate_type: "96_deep_well"
  #   checks: null
  #   comment: Place plate in Solo Position4

  # - name: Move plate from Sealer to Liconic
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "SealerNest"
  #     target: "Liconic.Nest"
  #     source_type: "module"
  #     target_type: "stack"   
  #   checks: null
  #   comment: Place plate onto Liconic
  


